// =========================================================
// cd31_tws_area_makro.bsh
// Semi-automatic batch analysis for CD31 IHC
// Fiji/ImageJ + Trainable Weka Segmentation
//
// FINAL WORKFLOW FOR THE METHOD PAPER:
//   - Select image folder
//   - Select ROI folder (.roi with the same base name as the image)
//   - Select Trainable Weka classifier (.model)
//   - Select output folder
//   - Per image: load ROI, create TWS result, threshold the CD31 class
//   - Mask: CD31 white, background black
//   - Analyze Particles 0-Infinity, no Close, no Fill Holes, no filter
//   - Final parameter: CD31.Ar/T.Ar (%) = total CD31-positive area / ROI area * 100
//
// IMPORTANT:
//   This macro deliberately uses the classified TWS result image,
//   matching the manual workflow "Create Result -> Threshold class 0".
//   It does NOT use the probability/argmax stack.
//   It does NOT use the ImageJ %Area column for the final value.
//
// Language: BeanShell
// =========================================================

// -------------------------
// 1) IMPORTS
// -------------------------
import ij.IJ;
import ij.ImagePlus;
import ij.gui.GenericDialog;
import ij.gui.Roi;
import ij.io.DirectoryChooser;
import ij.io.FileSaver;
import ij.io.OpenDialog;
import ij.io.RoiDecoder;
import ij.measure.Calibration;
import ij.measure.Measurements;
import ij.measure.ResultsTable;
import ij.process.ByteProcessor;
import ij.process.ImageProcessor;
import ij.process.ImageStatistics;
import ij.plugin.filter.ParticleAnalyzer;
import trainableSegmentation.WekaSegmentation;

import java.awt.Color;
import java.io.File;
import java.io.FileWriter;
import java.io.BufferedWriter;
import java.text.SimpleDateFormat;
import java.util.Date;
import java.util.Arrays;

// -------------------------
// 2) CONSTANTS
// -------------------------
String MACRO_VERSION = "CD31_TWS_Area_Makro_V3_CREATE_RESULT_FINAL_2026-05-31";

double DEFAULT_PIXEL_SIZE_UM = 1.02;

String DIR_RESULTS = "TWS_classified_results";
String DIR_MASKS = "CD31_raw_masks";
String DIR_QC = "QC_overlays";

String SUMMARY_CSV_NAME = "CD31_TWS_Summary.csv";
String LOG_NAME = "CD31_TWS_Log.txt";

String SUFFIX_RESULT = "_TWS_classified_result.tif";
String SUFFIX_MASK = "_CD31_raw_mask";
String SUFFIX_QC = "_QC_overlay.tif";

// -------------------------
// 3) HELPER FUNCTIONS
// -------------------------
void ensureDir(String path) {
    File d = new File(path);

    if (!d.exists()) {
        d.mkdirs();
    }
}

boolean isImageFile(String name) {
    String lower = name.toLowerCase();

    return lower.endsWith(".tif") || lower.endsWith(".tiff") ||
           lower.endsWith(".jpg") || lower.endsWith(".jpeg") ||
           lower.endsWith(".png") || lower.endsWith(".bmp");
}

String getBaseName(String name) {
    int dot = name.lastIndexOf('.');

    if (dot > 0) {
        return name.substring(0, dot);
    }

    return name;
}

String sanitizeForFileName(String s) {
    if (s == null || s.length() == 0) {
        return "Run";
    }

    return s.replaceAll("[^A-Za-z0-9_\\-]+", "_");
}

String csvEscape(String s) {
    if (s == null) {
        s = "";
    }

    s = s.replace("\"", "\"\"");

    return "\"" + s + "\"";
}

String formatDouble(double x, int digits) {
    if (Double.isNaN(x) || Double.isInfinite(x)) {
        return "NA";
    }

    return IJ.d2s(x, digits);
}

void appendLog(String logPath, String msg) {
    BufferedWriter bw = null;

    try {
        bw = new BufferedWriter(new FileWriter(logPath, true));
        bw.write(msg);
        bw.newLine();
    } catch (Exception e) {
        IJ.log("Could not write log: " + e.getMessage());
    } finally {
        try {
            if (bw != null) {
                bw.close();
            }
        } catch (Exception ee) {
            // ignore
        }
    }

    IJ.log(msg);
}

void ensureSummaryHeader(String summaryCsvPath) {
    BufferedWriter bw = null;

    try {
        File f = new File(summaryCsvPath);

        if (!f.exists()) {
            bw = new BufferedWriter(new FileWriter(f, true));
            bw.write(
                "Run_ID," +
                "Run_Name," +
                "Macro_Version," +
                "ImageName," +
                "ImagePath," +
                "ROI_File," +
                "ROI_TAr_um2," +
                "CD31_TotalArea_um2," +
                "CD31_Ar_TAr_percent," +
                "CD31_Positive_Pixels," +
                "Particle_Count_0_Inf," +
                "Particle_TotalArea_um2," +
                "Particle_AverageSize_um2," +
                "Classifier_Name," +
                "Classifier_Path," +
                "CD31_Result_Class_Value," +
                "PixelWidth_um," +
                "PixelHeight_um," +
                "ImageWidth_px," +
                "ImageHeight_px," +
                "Run_Date"
            );
            bw.newLine();
        }
    } catch (Exception e) {
        IJ.log("Could not write summary header: " + e.getMessage());
    } finally {
        try {
            if (bw != null) {
                bw.close();
            }
        } catch (Exception ee) {
            // ignore
        }
    }
}

void appendSummaryRow(
    String summaryCsvPath,
    String runId,
    String runName,
    String macroVersion,
    String imageName,
    String imagePath,
    String roiFile,
    double roiTar,
    double cd31Area,
    double cd31Pct,
    long cd31Pixels,
    int particleCount,
    double particleTotalArea,
    double particleAverageSize,
    String classifierName,
    String classifierPath,
    int cd31ResultClassValue,
    double pixelWidthUm,
    double pixelHeightUm,
    int imageWidth,
    int imageHeight,
    String runDate
) {
    BufferedWriter bw = null;

    try {
        bw = new BufferedWriter(new FileWriter(summaryCsvPath, true));
        bw.write(
            csvEscape(runId) + "," +
            csvEscape(runName) + "," +
            csvEscape(macroVersion) + "," +
            csvEscape(imageName) + "," +
            csvEscape(imagePath) + "," +
            csvEscape(roiFile) + "," +
            formatDouble(roiTar, 3) + "," +
            formatDouble(cd31Area, 3) + "," +
            formatDouble(cd31Pct, 6) + "," +
            cd31Pixels + "," +
            particleCount + "," +
            formatDouble(particleTotalArea, 3) + "," +
            formatDouble(particleAverageSize, 3) + "," +
            csvEscape(classifierName) + "," +
            csvEscape(classifierPath) + "," +
            cd31ResultClassValue + "," +
            formatDouble(pixelWidthUm, 9) + "," +
            formatDouble(pixelHeightUm, 9) + "," +
            imageWidth + "," +
            imageHeight + "," +
            csvEscape(runDate)
        );
        bw.newLine();
    } catch (Exception e) {
        IJ.log("Could not write summary row: " + e.getMessage());
    } finally {
        try {
            if (bw != null) {
                bw.close();
            }
        } catch (Exception ee) {
            // ignore
        }
    }
}

Roi loadMatchingRoi(String roiDirPath, String baseName) {
    try {
        String roiPath = roiDirPath + baseName + ".roi";
        File roiFile = new File(roiPath);

        if (!roiFile.exists()) {
            return null;
        }

        RoiDecoder rd = new RoiDecoder(roiPath);

        return rd.getRoi();
    } catch (Exception e) {
        IJ.log("Could not load ROI for " + baseName + ": " + e.getMessage());

        return null;
    }
}

void setMicronCalibration(ImagePlus img, double pixelWidthUm, double pixelHeightUm) {
    Calibration cal = img.getCalibration();

    if (cal == null) {
        cal = new Calibration();
    }

    cal.pixelWidth = pixelWidthUm;
    cal.pixelHeight = pixelHeightUm;
    cal.pixelDepth = 1.0;
    cal.setUnit("micron");
    img.setCalibration(cal);
}

double measureRoiAreaUm2(ImagePlus img, Roi roi) {
    img.setRoi(roi);
    ImageStatistics stats = img.getStatistics(Measurements.AREA);
    img.deleteRoi();

    return stats.area;
}

boolean isMaskEdge(ImageProcessor maskIp, int x, int y, int w, int h) {
    if (maskIp.getPixel(x, y) == 0) {
        return false;
    }

    if (x == 0 || y == 0 || x == w - 1 || y == h - 1) {
        return true;
    }

    if (maskIp.getPixel(x - 1, y) == 0) {
        return true;
    }
    if (maskIp.getPixel(x + 1, y) == 0) {
        return true;
    }
    if (maskIp.getPixel(x, y - 1) == 0) {
        return true;
    }
    if (maskIp.getPixel(x, y + 1) == 0) {
        return true;
    }

    return false;
}

void drawDot(ImageProcessor ip, int x, int y, int radius) {
    int w = ip.getWidth();
    int h = ip.getHeight();

    for (int yy = y - radius; yy <= y + radius; yy++) {
        for (int xx = x - radius; xx <= x + radius; xx++) {
            if (xx >= 0 && yy >= 0 && xx < w && yy < h) {
                ip.drawPixel(xx, yy);
            }
        }
    }
}

void drawMaskEdges(ImageProcessor qcIp, ImageProcessor maskIp, int w, int h, Color color, int radius) {
    qcIp.setColor(color);

    for (int y = 0; y < h; y++) {
        for (int x = 0; x < w; x++) {
            if (isMaskEdge(maskIp, x, y, w, h)) {
                drawDot(qcIp, x, y, radius);
            }
        }
    }
}

void drawRoiEdge(ImageProcessor qcIp, Roi roi, int w, int h, Color color, int radius) {
    qcIp.setColor(color);

    for (int y = 0; y < h; y++) {
        for (int x = 0; x < w; x++) {
            if (roi.contains(x, y)) {
                boolean edge = false;

                if (!roi.contains(x - 1, y)) {
                    edge = true;
                }
                if (!roi.contains(x + 1, y)) {
                    edge = true;
                }
                if (!roi.contains(x, y - 1)) {
                    edge = true;
                }
                if (!roi.contains(x, y + 1)) {
                    edge = true;
                }

                if (edge) {
                    drawDot(qcIp, x, y, radius);
                }
            }
        }
    }
}

void saveQcOverlay(ImagePlus img, ImagePlus maskImg, Roi roi, String outPath) {
    try {
        ImagePlus qc = img.duplicate();

        if (qc.getStackSize() > 1) {
            qc.setSlice(1);
        }

        IJ.run(qc, "RGB Color", "");

        ImageProcessor qcIp = qc.getProcessor();
        ImageProcessor maskIp = maskImg.getProcessor();
        int w = qc.getWidth();
        int h = qc.getHeight();

        // ROI border: black wide + white narrow
        drawRoiEdge(qcIp, roi, w, h, Color.black, 2);
        drawRoiEdge(qcIp, roi, w, h, Color.white, 1);

        // CD31 mask border in magenta
        drawMaskEdges(qcIp, maskIp, w, h, Color.magenta, 1);

        new FileSaver(qc).saveAsTiff(outPath);
        qc.close();
    } catch (Exception e) {
        IJ.log("Could not save QC overlay: " + e.getMessage());
    }
}

double[] analyzeParticles0Infinity(ImagePlus maskImg) {
    double[] out = new double[3]; // count, totalArea, averageSize

    try {
        ResultsTable rt = new ResultsTable();
        int options = ParticleAnalyzer.SHOW_NONE | ParticleAnalyzer.CLEAR_WORKSHEET;
        int measurements = Measurements.AREA;
        ParticleAnalyzer pa = new ParticleAnalyzer(options, measurements, rt, 0.0, Double.POSITIVE_INFINITY, 0.0, 1.0);
        pa.setHideOutputImage(true);
        pa.analyze(maskImg);

        int n = rt.size();
        double sumArea = 0.0;

        for (int i = 0; i < n; i++) {
            sumArea += rt.getValue("Area", i);
        }

        out[0] = n;
        out[1] = sumArea;

        if (n > 0) {
            out[2] = sumArea / n;
        }
    } catch (Exception e) {
        IJ.log("Analyze Particles failed internally: " + e.getMessage());
    }

    return out;
}

// -------------------------
// 4) SELECT FOLDERS AND FILES
// -------------------------
DirectoryChooser dcIn = new DirectoryChooser("1) Select image folder with original images");
String inputDir = dcIn.getDirectory();

if (inputDir == null) {
    return;
}

DirectoryChooser dcRoi = new DirectoryChooser("2) Select ROI folder (.roi, same name as image)");
String roiDir = dcRoi.getDirectory();

if (roiDir == null) {
    return;
}

OpenDialog od = new OpenDialog("3) Select Trainable Weka classifier (.model)", null);
String classifierDir = od.getDirectory();
String classifierName = od.getFileName();

if (classifierDir == null || classifierName == null) {
    return;
}

String classifierPath = classifierDir + classifierName;

DirectoryChooser dcOut = new DirectoryChooser("4) Select output folder");
String outputDir = dcOut.getDirectory();

if (outputDir == null) {
    return;
}

// -------------------------
// 5) PARAMETER DIALOG
// -------------------------
GenericDialog gd = new GenericDialog("CD31 TWS Area Analysis - FINAL Create Result");
gd.addStringField("Run_Name", "CD31_TWS_CreateResult_Run", 30);
gd.addNumericField("CD31_Result_Class_Value", 0, 0);
gd.addNumericField("Pixel_width_um", DEFAULT_PIXEL_SIZE_UM, 6);
gd.addNumericField("Pixel_height_um", DEFAULT_PIXEL_SIZE_UM, 6);
gd.addCheckbox("Overwrite_image_calibration_with_values_above", true);
gd.addCheckbox("Save_CD31_raw_masks", true);
gd.addCheckbox("Save_QC_overlays", true);
gd.addMessage("Workflow: Create Result -> threshold class -> CD31 white / background black -> Analyze 0-Infinity.\nFinal value: Total Area / ROI area * 100.\nDefault CD31_Result_Class_Value = 0 if your manual threshold was 0-0.");
gd.showDialog();

if (gd.wasCanceled()) {
    return;
}

String runName = gd.getNextString();
int cd31ResultClassValue = (int) gd.getNextNumber();
double pixelWidthUm = gd.getNextNumber();
double pixelHeightUm = gd.getNextNumber();
boolean overwriteCal = gd.getNextBoolean();
boolean saveMasks = gd.getNextBoolean();
boolean saveOverlays = gd.getNextBoolean();

if (cd31ResultClassValue < 0) {
    cd31ResultClassValue = 0;
}

// -------------------------
// 6) OUTPUT STRUCTURE
// -------------------------
String runDate = new SimpleDateFormat("yyyy-MM-dd_HH-mm-ss").format(new Date());
String runId = runDate + "_" + sanitizeForFileName(runName);

String runOutDir = outputDir + runId + File.separator;
String resultDir = runOutDir + DIR_RESULTS + File.separator;
String maskDir = runOutDir + DIR_MASKS + File.separator;
String qcDir = runOutDir + DIR_QC + File.separator;
String summaryCsvPath = runOutDir + SUMMARY_CSV_NAME;
String logPath = runOutDir + LOG_NAME;

ensureDir(runOutDir);
ensureDir(resultDir);
ensureDir(maskDir);
ensureDir(qcDir);
ensureSummaryHeader(summaryCsvPath);

appendLog(logPath, "=================================================");
appendLog(logPath, "Start: " + runDate);
appendLog(logPath, "Run_ID: " + runId);
appendLog(logPath, "Run_Name: " + runName);
appendLog(logPath, "Macro_Version: " + MACRO_VERSION);
appendLog(logPath, "Input: " + inputDir);
appendLog(logPath, "ROI: " + roiDir);
appendLog(logPath, "Classifier: " + classifierPath);
appendLog(logPath, "Output: " + runOutDir);
appendLog(logPath, "CD31_Result_Class_Value: " + cd31ResultClassValue);
appendLog(logPath, "Pixel size: " + pixelWidthUm + " x " + pixelHeightUm + " um");
appendLog(logPath, "Overwrite calibration: " + overwriteCal);
appendLog(logPath, "Workflow: Create Result full image, ROI-restricted mask, Analyze Particles 0-Infinity");

// -------------------------
// 7) LOAD CLASSIFIER
// -------------------------
WekaSegmentation segmentator = new WekaSegmentation();
segmentator.loadClassifier(classifierPath);

// -------------------------
// 8) PROCESS FILES
// -------------------------
File inDirFile = new File(inputDir);
File[] files = inDirFile.listFiles();

if (files == null || files.length == 0) {
    IJ.error("No files found in the image folder.");
    return;
}

Arrays.sort(files);

int processed = 0;
int skipped = 0;

for (int i = 0; i < files.length; i++) {
    File f = files[i];

    if (f == null || f.isDirectory()) {
        continue;
    }

    String fileName = f.getName();

    if (!isImageFile(fileName)) {
        continue;
    }

    String baseName = getBaseName(fileName);
    appendLog(logPath, "-------------------------------------------------");
    appendLog(logPath, "Image: " + fileName);

    ImagePlus img = null;
    ImagePlus classified = null;
    ImagePlus maskImg = null;

    try {
        Roi roi = loadMatchingRoi(roiDir, baseName);

        if (roi == null) {
            appendLog(logPath, "  -> SKIPPED: No matching ROI found: " + baseName + ".roi");
            skipped++;
            continue;
        }

        img = IJ.openImage(f.getAbsolutePath());

        if (img == null) {
            appendLog(logPath, "  -> SKIPPED: Image could not be opened.");
            skipped++;
            continue;
        }

        if (overwriteCal) {
            setMicronCalibration(img, pixelWidthUm, pixelHeightUm);
        } else {
            Calibration cal0 = img.getCalibration();
            pixelWidthUm = cal0.pixelWidth;
            pixelHeightUm = cal0.pixelHeight;
        }

        double roiTarUm2 = measureRoiAreaUm2(img, roi);

        if (roiTarUm2 <= 0 || Double.isNaN(roiTarUm2)) {
            appendLog(logPath, "  -> SKIPPED: ROI area invalid.");
            skipped++;
            continue;
        }

        // Apply TWS: classified result image, same as the manual "Create Result".
        classified = segmentator.applyClassifier(img, 0, false);

        if (classified == null) {
            appendLog(logPath, "  -> ERROR: TWS classified result image could not be created.");
            skipped++;
            continue;
        }

        if (classified.getStackSize() > 1) {
            classified.setSlice(1);
        }

        classified.setCalibration(img.getCalibration());
        new FileSaver(classified).saveAsTiff(resultDir + baseName + SUFFIX_RESULT);

        int w = img.getWidth();
        int h = img.getHeight();
        ImageProcessor classIp = classified.getProcessor();

        ByteProcessor maskBp = new ByteProcessor(w, h);
        long cd31PixelCount = 0;

        for (int y = 0; y < h; y++) {
            for (int x = 0; x < w; x++) {
                if (roi.contains(x, y)) {
                    int classValue = (int) Math.round(classIp.getPixelValue(x, y));

                    if (classValue == cd31ResultClassValue) {
                        maskBp.set(x, y, 255); // CD31 positive: white
                        cd31PixelCount++;
                    }
                }
            }
        }

        maskImg = new ImagePlus(baseName + SUFFIX_MASK, maskBp);
        maskImg.setCalibration(img.getCalibration());

        double cd31AreaUm2 = cd31PixelCount * pixelWidthUm * pixelHeightUm;
        double cd31Pct = (cd31AreaUm2 / roiTarUm2) * 100.0;

        // Analyze Particles 0-Infinity on the mask. Area should match cd31Area since the mask is white.
        double[] particleOut = analyzeParticles0Infinity(maskImg);
        int particleCount = (int) particleOut[0];
        double particleTotalArea = particleOut[1];
        double particleAverageSize = particleOut[2];

        if (saveMasks) {
            new FileSaver(maskImg).saveAsTiff(maskDir + baseName + SUFFIX_MASK + ".tif");
        }
        if (saveOverlays) {
            saveQcOverlay(img, maskImg, roi, qcDir + baseName + SUFFIX_QC);
        }

        appendSummaryRow(
            summaryCsvPath,
            runId,
            runName,
            MACRO_VERSION,
            fileName,
            f.getAbsolutePath(),
            baseName + ".roi",
            roiTarUm2,
            cd31AreaUm2,
            cd31Pct,
            cd31PixelCount,
            particleCount,
            particleTotalArea,
            particleAverageSize,
            classifierName,
            classifierPath,
            cd31ResultClassValue,
            pixelWidthUm,
            pixelHeightUm,
            img.getWidth(),
            img.getHeight(),
            runDate
        );

        appendLog(logPath, "  ROI_TAr_um2: " + formatDouble(roiTarUm2, 3));
        appendLog(logPath, "  CD31_TotalArea_um2: " + formatDouble(cd31AreaUm2, 3));
        appendLog(logPath, "  CD31.Ar/T.Ar_percent: " + formatDouble(cd31Pct, 6));
        appendLog(logPath, "  Particle_Count_0_Inf: " + particleCount);

        processed++;

    } catch (Exception e) {
        appendLog(logPath, "  -> ERROR: " + e.getMessage());
        skipped++;
    } finally {
        try {
            if (img != null) {
                img.close();
            }
        } catch (Exception ee) {
            // ignore
        }
        try {
            if (classified != null) {
                classified.close();
            }
        } catch (Exception ee) {
            // ignore
        }
        try {
            if (maskImg != null) {
                maskImg.close();
            }
        } catch (Exception ee) {
            // ignore
        }
    }
}

appendLog(logPath, "=================================================");
appendLog(logPath, "Done.");
appendLog(logPath, "Processed: " + processed);
appendLog(logPath, "Skipped/Errors: " + skipped);
appendLog(logPath, "Summary: " + summaryCsvPath);
appendLog(logPath, "=================================================");

IJ.showMessage("CD31 TWS Area Analysis done",
    "Processed: " + processed + "\n" +
    "Skipped/Errors: " + skipped + "\n\n" +
    "Output:\n" + runOutDir
);
